PsychoPy2experiment version="2020.1.1"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = blockedTrials
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $stimFile
      size = (0.5,0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.3
      units = height
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    RatingScaleComponent rating
      categoryChoices = 0, 1, 2, 3, 4, 5, 6, 7, 8, 9
      forceEndRoutine = True
      high = 9
      low = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 1.0
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
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      text:
        0: Airplane,    1: Automobile
        2: Bird,        3: Cat
        4: Deer,        5: Dog
        6: Frog,        7: Horse
        8: Ship,        9: Truck
  Routine readyMessage
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $readyMsg
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditions = [{'readyMsg': 'This is a block of images', 'condsFile': 'imageBlock.csv'}]
    conditionsFile = chooseBlock.csv
    isTrials = False
    loopType = random
    nReps = 2
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    Routine readyMessage
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
